PsychoPy2experiment version="2020.1.3"
Settings
  Completed URL = https://umanitobapsych.sona-systems.com/webstudy_credit.aspx?experiment_id=XXXX&credit_token=11X11X111X1X1X1XX1X11111111XX11X&survey_code=+expInfo['participant']
  Enable Escape = False
  Experiment info = {'participant': '', 'Press OK to begin': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  expName = Example_Experiment
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Routines
  Routine WelcomeScreen
    TextComponent textWelcome
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You will be presented with several words. Try to remember them.

        Press "e" to begin
    KeyboardComponent keyWelcome
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StudyTrial
    TextComponent textStudyWord
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $WordItem
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  Routine Blank500
    TextComponent textBlank500
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine WaitScreen
    TextComponent textWaitScreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Take a rest if you need.

        Next, your job will be to indicate whether you previously studied a word by pressing 'y', otherwise press 'n'. Keep your index fingers on these keys. It is important that you respond accurately but also quickly.

        When you are ready press 'i' to continue.
    KeyboardComponent keyWaitScreen
      allowedKeys = 'i'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestTrial
    TextComponent textTestWord
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $WordItem
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    KeyboardComponent keyTest_yes_no
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndScreen
    TextComponent textEnd
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press Space to end the experiment.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Rest
    TextComponent textRest
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Take a break if you need.

        When you are ready, press the spacebar to continue.
    KeyboardComponent keyRest
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_rest
      Code Type = Py
      Begin Routine:
        if (trialsStudy1.thisN+1)%12==0 and trialsStudy1.thisN > 1:
            continueRoutine=True
        else:
            continueRoutine=False
  Routine check
    TextComponent textCheck
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $trials_list
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Flow
  Routine WelcomeScreen
  Routine Blank500
  LoopInitiator trialsStudy1 loopType="TrialHandler"
    Selected rows = 0:12
    conditionsFile = Example_Experiment_words.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('WordItem', 'SALESMAN'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'LAWYER'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'PROFESSOR'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'COURIER'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'TEACHER'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'REVEREND'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'NURSE'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'ENGINEER'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'CARPENTER'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'JANITOR'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'PLUMBER'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'COBRA'), ('OldNew', 'Old'), ('ItemType', 'CW')]),
      OrderedDict([('WordItem', 'ELECTRICIAN'), ('OldNew', 'New'), ('ItemType', 'RelLure')]),
      OrderedDict([('WordItem', 'ACCOUNTANT'), ('OldNew', 'New'), ('ItemType', 'RelLure')]),
      OrderedDict([('WordItem', 'DENTIST'), ('OldNew', 'New'), ('ItemType', 'RelLure')]),
      OrderedDict([('WordItem', 'DETECTIVE'), ('OldNew', 'New'), ('ItemType', 'RelLure')]),
      OrderedDict([('WordItem', 'PYTHON'), ('OldNew', 'New'), ('ItemType', 'CWLure')])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
    Routine StudyTrial
    Routine Blank500
  LoopTerminator trialsStudy1
  Routine Blank500
  Routine WaitScreen
  Routine Blank500
  LoopInitiator trialsTest loopType="TrialHandler"
    conditionsFile = Example_Experiment_words.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('WordItem', 'SALESMAN'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'LAWYER'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'PROFESSOR'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'COURIER'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'TEACHER'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'REVEREND'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'NURSE'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'ENGINEER'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'CARPENTER'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'JANITOR'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'PLUMBER'), ('OldNew', 'Old'), ('ItemType', 'Occupations')]),
      OrderedDict([('WordItem', 'COBRA'), ('OldNew', 'Old'), ('ItemType', 'CW')]),
      OrderedDict([('WordItem', 'ELECTRICIAN'), ('OldNew', 'New'), ('ItemType', 'RelLure')]),
      OrderedDict([('WordItem', 'ACCOUNTANT'), ('OldNew', 'New'), ('ItemType', 'RelLure')]),
      OrderedDict([('WordItem', 'DENTIST'), ('OldNew', 'New'), ('ItemType', 'RelLure')]),
      OrderedDict([('WordItem', 'DETECTIVE'), ('OldNew', 'New'), ('ItemType', 'RelLure')]),
      OrderedDict([('WordItem', 'PYTHON'), ('OldNew', 'New'), ('ItemType', 'CWLure')])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
    Routine TestTrial
    Routine Blank500
  LoopTerminator trialsTest
  Routine EndScreen
